<?xml version='1.0'?>
<!-- no Ca_cytonetic model here to keep it clean. Also no concentrations: just mol
 try Cm of 200 pF for whole cell (1e-5 F is TOO LARGE) -->
<!-- CONVENTION: flow from JSR (q1) to cytosol (q2).-->
<!-- somehow, release (current != 0) only when Cai spikes.
 Try : Gpore depend on dCai/dt-->
<model name="ca_rel_only" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="../Units_BG.cellml">
        <units name="mM" units_ref="mM"/>
        <units name="per_mol" units_ref="per_mol"/>
        <units name="J_per_mol" units_ref="J_per_mol"/>
        <units name="mol_per_s" units_ref="mol_per_s"/>
        <units name="C_per_mol" units_ref="C_per_mol"/>
        <units name="J_per_C" units_ref="J_per_C"/>
        <units name="microm3" units_ref="microm3"/>
    </import>
    <import xlink:href="../Units_kinetic.cellml">
        <units name="microA_per_microF" units_ref="microA_per_microF"/>
        <units name="millimolar_per_second" units_ref="millimolar_per_second"/>
        <units name="second_per_mol" units_ref="second_per_mol"/>
    </import>
    <units name="millivolt">
        <unit prefix="milli" units="volt"/>
    </units>
    <component name="environment">
        <!-- K mols from Pan. vol_c is 1e-15, vol_ext is 1e-14 m3
 [Ca_JSR] ~= 1.8 mM. use V_myo = 3e-6 uL to calculate moles of Ca_JSR.-->
        <variable name="time" public_interface="out" units="second"/>
        <variable initial_value="200e-12" name="C_m" public_interface="out" units="farad"/>
        <variable initial_value="0.00456e-15" name="qCa_cyto" public_interface="out" units="mole"/>
        <variable initial_value="4.5e-16" name="qCa_JSR" public_interface="out" units="mole"/>
        <variable initial_value="1e-15" name="qEnz_rel" public_interface="out" units="mole"/>
        <variable initial_value="2494.34" name="RT" public_interface="out" units="J_per_mol"/>
        <variable initial_value="1" name="z" public_interface="out" units="dimensionless"/>
        <variable initial_value="96500" name="F" public_interface="out" units="C_per_mol"/>
        <variable name="v_Re1" public_interface="in" units="mol_per_s"/>
        <variable name="G_pore" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>qCa_JSR</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>qCa_cyto</ci>
                </apply>
                <ci>v_Re1</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>qEnz_rel</ci>
                </apply>
                <cn cellml:units="mol_per_s">0</cn>
            </apply>
        </math>
    </component>
    <component name="BG_rel">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="RT" public_interface="in" units="J_per_mol"/>
        <variable name="z" public_interface="in" units="dimensionless"/>
        <variable name="F" public_interface="in" units="C_per_mol"/>
        <!-- Parameters-->
        <variable name="C_m" public_interface="in" units="farad"/>
        <variable initial_value="1e1" name="K_q1" units="per_mol"/>
        <variable initial_value="1e1" name="K_q2" units="per_mol"/>
        <variable initial_value="2E-8" name="K_Re1" units="mol_per_s"/>
        <variable name="G_pore" public_interface="out" units="dimensionless"/>
        <variable initial_value="1" name="G_ion" units="dimensionless"/>
        <variable initial_value="1e12" name="g_coeff" units="dimensionless"/>
        <!--  0<Gion<1 (it is the open probability)
 Gpore is the channel conductance-->
        <!-- State variables-->
        <variable name="q1" public_interface="in" units="mole"/>
        <variable name="q2" public_interface="in" units="mole"/>
        <variable name="q3" public_interface="in" units="mole"/>
        <variable name="dCaidt" public_interface="in" units="dimensionless"/>
        <variable name="i_BG_SR_to_cyto" units="microA_per_microF"/>
        <variable name="v_Re1" public_interface="out" units="mol_per_s"/>
        <variable name="u1" units="J_per_mol"/>
        <variable name="u2" units="J_per_mol"/>
        <variable name="u3" units="J_per_mol"/>
        <variable name="u4" units="J_per_mol"/>
        <variable name="u5" units="J_per_mol"/>
        <!-- Convention: positive flow from inside to outside-->
        <!-- Conservation laws-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>u4</ci>
                <apply>
                    <plus/>
                    <ci>u1</ci>
                    <ci>u3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u5</ci>
                <apply>
                    <plus/>
                    <ci>u2</ci>
                    <ci>u3</ci>
                </apply>
            </apply>
            <!-- Gpore calculation: depends on dCaidt (positive only)
 FIX: works if dCaidt does NOT depend on v_rel
 NO NEGATIVE CURRENTS-->
            <!--1{dimensionless};-->
            <apply>
                <eq/>
                <ci>G_pore</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>dCaidt</ci>
                            <ci>g_coeff</ci>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <gt/>
                                <ci>dCaidt</ci>
                                <cn cellml:units="dimensionless">0</cn>
                            </apply>
                            <apply>
                                <gt/>
                                <apply>
                                    <minus/>
                                    <ci>u1</ci>
                                    <ci>u2</ci>
                                </apply>
                                <cn cellml:units="J_per_mol">0</cn>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <!--G_pore = 1{dimensionless};-->
            <!-- Constitutive relations-->
            <apply>
                <eq/>
                <ci>u1</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q1</ci>
                            <ci>q1</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u2</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q2</ci>
                            <ci>q2</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u3</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>G_pore</ci>
                            <ci>G_ion</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_Re1</ci>
                <apply>
                    <times/>
                    <ci>K_Re1</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u4</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u5</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- for comparison, calculate the change in concentration AND current as well-->
            <apply>
                <eq/>
                <ci>i_BG_SR_to_cyto</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>v_Re1</ci>
                        <ci>F</ci>
                    </apply>
                    <ci>C_m</ci>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="BG_rel"/>
        <map_variables variable_1="time" variable_2="t"/>
        <map_variables variable_1="RT" variable_2="RT"/>
        <map_variables variable_1="z" variable_2="z"/>
        <map_variables variable_1="F" variable_2="F"/>
        <map_variables variable_1="qCa_JSR" variable_2="q1"/>
        <map_variables variable_1="qCa_cyto" variable_2="q2"/>
        <map_variables variable_1="qEnz_rel" variable_2="q3"/>
        <map_variables variable_1="C_m" variable_2="C_m"/>
        <map_variables variable_1="v_Re1" variable_2="v_Re1"/>
        <map_variables variable_1="G_pore" variable_2="G_pore"/>
    </connection>
</model>
