<?xml version='1.0' encoding='UTF-8'?>
<model cmeta:id="faville_pullan_sanders_koh_lloyd_smith_2009_pacemaker" name="faville_pullan_sanders_koh_lloyd_smith_2009_pacemaker" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="millivolt">
        <unit prefix="milli" units="volt"/>
    </units>
    <units name="per_millivolt">
        <unit exponent="-1" units="millivolt"/>
    </units>
    <units name="per_second_per_millivolt">
        <unit exponent="-1" units="second"/>
        <unit exponent="-1" units="millivolt"/>
    </units>
    <units name="micromolar">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="per_micromolar">
        <unit exponent="-1" units="micromolar"/>
    </units>
    <units name="per_micromolar2">
        <unit exponent="-2" units="micromolar"/>
    </units>
    <units name="picofarad">
        <unit prefix="pico" units="farad"/>
    </units>
    <units name="picosiemens">
        <unit prefix="pico" units="siemens"/>
    </units>
    <units name="picoampere">
        <unit prefix="pico" units="ampere"/>
    </units>
    <units name="femtoampere">
        <unit prefix="femto" units="ampere"/>
    </units>
    <units name="micromolar_per_coulomb">
        <unit units="micromolar"/>
        <unit exponent="-1" units="coulomb"/>
    </units>
    <units name="femtocoulomb_per_zeptomole">
        <unit prefix="femto" units="coulomb"/>
        <unit exponent="-1" prefix="zepto" units="mole"/>
    </units>
    <units name="attojoule_per_zeptomole_kelvin">
        <unit prefix="atto" units="joule"/>
        <unit exponent="-1" prefix="zepto" units="mole"/>
        <unit exponent="-1" units="kelvin"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="second"/>
    </units>
    <units name="per_second_squared">
        <unit exponent="-2" units="second"/>
    </units>
    <units name="flux">
        <unit units="micromolar"/>
        <unit exponent="-1" units="second"/>
    </units>
    <component cmeta:id="pacemaker_unit_model" name="pacemaker_unit_model">
        <variable name="I_ion_PU" private_interface="in" public_interface="out" units="picoampere"/>
        <variable name="CS1" private_interface="in" public_interface="out" units="micromolar"/>
        <variable name="CS2" private_interface="in" public_interface="out" units="micromolar"/>
        <variable name="n_PU" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable name="JS2Cy" private_interface="out" public_interface="in" units="flux"/>
        <variable name="JS1S2" private_interface="out" public_interface="in" units="flux"/>
        <variable name="Vm" private_interface="out" public_interface="in" units="millivolt"/>
        <variable name="time" private_interface="out" public_interface="in" units="second"/>
    </component>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="PU_membrane"/>
        <map_variables variable_1="I_ion_PU" variable_2="I_ion_PU"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="CS2"/>
        <map_variables variable_1="CS2" variable_2="CS2"/>
        <map_variables variable_1="time" variable_2="time"/>
        <map_variables variable_1="JS2Cy" variable_2="JS2Cy"/>
        <map_variables variable_1="JS1S2" variable_2="JS1S2"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="CS1"/>
        <map_variables variable_1="CS1" variable_2="CS1"/>
        <map_variables variable_1="JS1S2" variable_2="JS1S2"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="model_parameters"/>
        <map_variables variable_1="n_PU" variable_2="n_PU"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="I_NaP"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="I_Na"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="I_Ca"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="I_NSCC_Ca"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="I_NSCC_Na"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="JIPR"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="CER"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="CMT"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="pacemaker_unit_model" component_2="NS1"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <component name="PU_membrane">
        <variable name="I_iCa" public_interface="out" units="picoampere"/>
        <variable name="I_iNa" public_interface="out" units="picoampere"/>
        <variable name="I_ion_PU" public_interface="out" units="picoampere"/>
        <variable name="alpha_scale" public_interface="in" units="dimensionless"/>
        <variable name="I_Ca" public_interface="in" units="picoampere"/>
        <variable name="I_Na" public_interface="in" units="picoampere"/>
        <variable name="I_NaP" public_interface="in" units="picoampere"/>
        <variable name="I_NSCC_Ca" public_interface="in" units="picoampere"/>
        <variable name="I_PM" public_interface="in" units="picoampere"/>
        <variable name="I_NSCC_Na" public_interface="in" units="picoampere"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_iCa</ci>
                <apply>
                    <times/>
                    <ci>alpha_scale</ci>
                    <apply>
                        <plus/>
                        <ci>I_Ca</ci>
                        <ci>I_NSCC_Ca</ci>
                        <ci>I_PM</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_iNa</ci>
                <apply>
                    <times/>
                    <ci>alpha_scale</ci>
                    <apply>
                        <plus/>
                        <ci>I_NSCC_Na</ci>
                        <ci>I_Na</ci>
                        <ci>I_NaP</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_ion_PU</ci>
                <apply>
                    <plus/>
                    <ci>I_iCa</ci>
                    <ci>I_iNa</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="I_Ca" name="I_Ca">
        <variable name="I_Ca" public_interface="out" units="picoampere"/>
        <variable initial_value="0.074" name="gCa_" units="picosiemens"/>
        <variable initial_value="0.013" name="kCa" units="per_millivolt"/>
        <variable initial_value="-0.20" name="kVCa" units="per_millivolt"/>
        <variable initial_value="-85.0" name="VhCa" units="millivolt"/>
        <variable name="gCa" units="picosiemens"/>
        <variable name="ECa_PU" units="millivolt"/>
        <variable name="Vm" public_interface="in" units="millivolt"/>
        <variable name="T" public_interface="in" units="kelvin"/>
        <variable name="R" public_interface="in" units="attojoule_per_zeptomole_kelvin"/>
        <variable name="F" public_interface="in" units="femtocoulomb_per_zeptomole"/>
        <variable name="CO" public_interface="in" units="micromolar"/>
        <variable name="CS1" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_Ca</ci>
                <apply>
                    <times/>
                    <ci>gCa</ci>
                    <apply>
                        <minus/>
                        <ci>Vm</ci>
                        <ci>ECa_PU</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>gCa</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>gCa_</ci>
                        <apply>
                            <exp/>
                            <apply>
                                <times/>
                                <ci>kCa</ci>
                                <ci>Vm</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <times/>
                                <ci>kVCa</ci>
                                <apply>
                                    <minus/>
                                    <ci>Vm</ci>
                                    <ci>VhCa</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>ECa_PU</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>R</ci>
                            <ci>T</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2.0</cn>
                            <ci>F</ci>
                        </apply>
                    </apply>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <ci>CO</ci>
                            <ci>CS1</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="I_NSCC_Ca" name="I_NSCC_Ca">
        <variable name="I_NSCC_Ca" public_interface="out" units="picoampere"/>
        <variable initial_value="0.10" name="gNSCC_Ca_" units="picosiemens"/>
        <variable name="gNSCC_Ca" units="picosiemens"/>
        <variable name="hNSCC" public_interface="in" units="dimensionless"/>
        <variable name="Vm" public_interface="in" units="millivolt"/>
        <variable name="ENSCC" public_interface="in" units="millivolt"/>
        <variable name="KNSCC" public_interface="in" units="micromolar"/>
        <variable name="CS1" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>gNSCC_Ca</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>gNSCC_Ca_</ci>
                        <apply>
                            <power/>
                            <ci>KNSCC</ci>
                            <ci>hNSCC</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <power/>
                            <ci>KNSCC</ci>
                            <ci>hNSCC</ci>
                        </apply>
                        <apply>
                            <power/>
                            <ci>CS1</ci>
                            <ci>hNSCC</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_NSCC_Ca</ci>
                <apply>
                    <times/>
                    <ci>gNSCC_Ca</ci>
                    <apply>
                        <minus/>
                        <ci>Vm</ci>
                        <ci>ENSCC</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="I_NSCC_Na" name="I_NSCC_Na">
        <variable name="I_NSCC_Na" public_interface="out" units="picoampere"/>
        <variable initial_value="160.0" name="gNSCC_Na_" units="picosiemens"/>
        <variable name="gNSCC_Na" units="picosiemens"/>
        <variable name="hNSCC" public_interface="in" units="dimensionless"/>
        <variable name="Vm" public_interface="in" units="millivolt"/>
        <variable name="ENSCC" public_interface="in" units="millivolt"/>
        <variable name="KNSCC" public_interface="in" units="micromolar"/>
        <variable name="CS1" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>gNSCC_Na</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>gNSCC_Na_</ci>
                        <apply>
                            <power/>
                            <ci>KNSCC</ci>
                            <ci>hNSCC</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <power/>
                            <ci>KNSCC</ci>
                            <ci>hNSCC</ci>
                        </apply>
                        <apply>
                            <power/>
                            <ci>CS1</ci>
                            <ci>hNSCC</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_NSCC_Na</ci>
                <apply>
                    <times/>
                    <ci>gNSCC_Na</ci>
                    <apply>
                        <minus/>
                        <ci>Vm</ci>
                        <ci>ENSCC</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="I_PM" name="I_PM">
        <variable name="I_PM" public_interface="out" units="picoampere"/>
        <variable initial_value="675.0" name="gPM" units="femtoampere"/>
        <variable initial_value="1.0" name="KPM" units="micromolar"/>
        <variable name="CS1" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_PM</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>gPM</ci>
                        <apply>
                            <power/>
                            <ci>CS1</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <power/>
                            <ci>KPM</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>CS1</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="I_Na" name="I_Na">
        <variable name="I_Na" public_interface="out" units="picoampere"/>
        <variable initial_value="13.5" name="gNa" units="picosiemens"/>
        <variable name="ENa_PU" units="millivolt"/>
        <variable name="Vm" public_interface="in" units="millivolt"/>
        <variable name="T" public_interface="in" units="kelvin"/>
        <variable name="R" public_interface="in" units="attojoule_per_zeptomole_kelvin"/>
        <variable name="F" public_interface="in" units="femtocoulomb_per_zeptomole"/>
        <variable name="NO" public_interface="in" units="micromolar"/>
        <variable name="NS1" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_Na</ci>
                <apply>
                    <times/>
                    <ci>gNa</ci>
                    <apply>
                        <minus/>
                        <ci>Vm</ci>
                        <ci>ENa_PU</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>ENa_PU</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>R</ci>
                            <ci>T</ci>
                        </apply>
                        <ci>F</ci>
                    </apply>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <ci>NO</ci>
                            <ci>NS1</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="I_NaP" name="I_NaP">
        <variable name="I_NaP" public_interface="out" units="picoampere"/>
        <variable initial_value="187.5" name="gNaP" units="picosiemens"/>
        <variable initial_value="1.0E4" name="KNaP" units="micromolar"/>
        <variable initial_value="4.0" name="hNaP" units="dimensionless"/>
        <variable initial_value="10.0" name="ENaP" units="millivolt"/>
        <variable name="NS1" public_interface="in" units="micromolar"/>
        <variable name="Vm" public_interface="in" units="millivolt"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_NaP</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>gNaP</ci>
                            <apply>
                                <power/>
                                <ci>NS1</ci>
                                <ci>hNaP</ci>
                            </apply>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <power/>
                                <ci>KNaP</ci>
                                <ci>hNaP</ci>
                            </apply>
                            <apply>
                                <power/>
                                <ci>NS1</ci>
                                <ci>hNaP</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>ENaP</ci>
                        <ci>Vm</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="JSERCA" name="JSERCA">
        <variable name="JSERCA" public_interface="out" units="flux"/>
        <variable initial_value="1.0E5" name="VSERCA" units="first_order_rate_constant"/>
        <variable initial_value="6E-4" name="A2" units="dimensionless"/>
        <variable initial_value="3.57" name="A4" units="per_micromolar"/>
        <variable initial_value="2.7E-5" name="A5" units="per_micromolar"/>
        <variable initial_value="2.31E-5" name="A6" units="per_micromolar2"/>
        <variable name="CER" public_interface="in" units="micromolar"/>
        <variable name="CS1" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JSERCA</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>VSERCA</ci>
                        <apply>
                            <minus/>
                            <ci>CS1</ci>
                            <apply>
                                <times/>
                                <ci>A2</ci>
                                <ci>CER</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <times/>
                            <ci>A4</ci>
                            <ci>CS1</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>A5</ci>
                            <ci>CER</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>A6</ci>
                            <ci>CS1</ci>
                            <ci>CER</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="JMCU" name="JMCU">
        <variable name="JMCU" public_interface="out" units="flux"/>
        <variable initial_value="800.0" name="VMCU" units="flux"/>
        <variable initial_value="10.0" name="KMCU" units="micromolar"/>
        <variable name="epsilon_INH" units="dimensionless"/>
        <variable initial_value="10.0" name="KINH" units="micromolar"/>
        <variable initial_value="4.0" name="hINH" units="dimensionless"/>
        <variable name="CS2" public_interface="in" units="micromolar"/>
        <variable name="CMT" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JMCU</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>VMCU</ci>
                            <apply>
                                <power/>
                                <ci>CS2</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <power/>
                                <ci>KMCU</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <apply>
                                <power/>
                                <ci>CS2</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                    </apply>
                    <ci>epsilon_INH</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>epsilon_INH</ci>
                <apply>
                    <divide/>
                    <apply>
                        <power/>
                        <ci>KINH</ci>
                        <ci>hINH</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <power/>
                            <ci>KINH</ci>
                            <ci>hINH</ci>
                        </apply>
                        <apply>
                            <power/>
                            <ci>CMT</ci>
                            <ci>hINH</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="JNCX" name="JNCX">
        <variable name="JNCX" public_interface="out" units="flux"/>
        <variable initial_value="3.0" name="VNCX" units="flux"/>
        <variable initial_value="0.3" name="KNCX" units="micromolar"/>
        <variable name="CMT" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JNCX</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>VNCX</ci>
                        <ci>CMT</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>CMT</ci>
                        <ci>KNCX</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="JIPR" name="JIPR">
        <variable name="JIPR" public_interface="out" units="flux"/>
        <variable initial_value="2000.0" name="kIPR" units="first_order_rate_constant"/>
        <variable initial_value="6.4" name="k_1" units="flux"/>
        <variable initial_value="0.0" name="k1" units="first_order_rate_constant"/>
        <variable initial_value="4.0" name="k2" units="first_order_rate_constant"/>
        <variable initial_value="250.0" name="r2" units="first_order_rate_constant"/>
        <variable initial_value="0.0" name="r_2" units="flux"/>
        <variable initial_value="750.0" name="r4" units="first_order_rate_constant"/>
        <variable initial_value="36.0" name="R1" units="micromolar"/>
        <variable initial_value="300.0" name="R3" units="micromolar"/>
        <variable name="phi1" units="first_order_rate_constant"/>
        <variable name="phi_1" units="flux"/>
        <variable name="phi2" units="first_order_rate_constant"/>
        <variable name="phi3" units="first_order_rate_constant"/>
        <variable initial_value="0.200" name="H" units="dimensionless"/>
        <variable initial_value="1500.0" name="g_beta" units="first_order_rate_constant"/>
        <variable initial_value="4.0" name="h_beta" units="dimensionless"/>
        <variable initial_value="0.85" name="g_alpha" units="first_order_rate_constant"/>
        <variable initial_value="0.35" name="K_beta" units="micromolar"/>
        <variable name="alpha_zeta" units="first_order_rate_constant"/>
        <variable name="beta_zeta" units="first_order_rate_constant"/>
        <variable initial_value="0.300" name="zeta" units="dimensionless"/>
        <variable initial_value="0.1" name="K_phi3_act" units="micromolar"/>
        <variable initial_value="0.5" name="K_phi3_inh" units="micromolar"/>
        <variable initial_value="3.0" name="h_phi3_act" units="dimensionless"/>
        <variable initial_value="3.0" name="h_phi3_inh" units="dimensionless"/>
        <variable initial_value="4.5" name="g_phi3" units="first_order_rate_constant"/>
        <variable name="CER" public_interface="in" units="micromolar"/>
        <variable name="CS2" public_interface="in" units="micromolar"/>
        <variable name="P" public_interface="in" units="micromolar"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>H</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>phi3</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <ci>H</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>P</ci>
                                <ci>phi1</ci>
                                <ci>phi2</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>P</ci>
                                    <ci>phi1</ci>
                                </apply>
                                <ci>phi_1</ci>
                            </apply>
                        </apply>
                        <ci>H</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>JIPR</ci>
                <apply>
                    <times/>
                    <ci>kIPR</ci>
                    <apply>
                        <power/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>P</ci>
                                <ci>phi1</ci>
                                <ci>H</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>P</ci>
                                    <ci>phi1</ci>
                                </apply>
                                <ci>phi_1</ci>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">4.0</cn>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>CER</ci>
                        <ci>CS2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>phi1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k1</ci>
                            <ci>R1</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>r2</ci>
                            <ci>CS2</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>R1</ci>
                        <ci>CS2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>phi_1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>k_1</ci>
                            <ci>r_2</ci>
                        </apply>
                        <ci>R3</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>R3</ci>
                        <ci>CS2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>phi2</ci>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k2</ci>
                            <ci>R3</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>r4</ci>
                            <ci>CS2</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>R3</ci>
                        <ci>CS2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>phi3</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>g_phi3</ci>
                        <ci>zeta</ci>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>K_phi3_act</ci>
                                    <ci>CS2</ci>
                                </apply>
                                <ci>h_phi3_act</ci>
                            </apply>
                        </apply>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>CS2</ci>
                                    <ci>K_phi3_inh</ci>
                                </apply>
                                <ci>h_phi3_inh</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>alpha_zeta</ci>
                <ci>g_alpha</ci>
            </apply>
            <apply>
                <eq/>
                <ci>beta_zeta</ci>
                <apply>
                    <divide/>
                    <ci>g_beta</ci>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <power/>
                            <apply>
                                <divide/>
                                <ci>K_beta</ci>
                                <ci>CS2</ci>
                            </apply>
                            <ci>h_beta</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>zeta</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_zeta</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <ci>zeta</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_zeta</ci>
                        <ci>zeta</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="CS1" name="CS1">
        <variable initial_value="0.120" name="CS1" public_interface="out" units="micromolar"/>
        <variable name="lambda_MT_S1" units="dimensionless"/>
        <variable name="lambda_ER_S1" units="dimensionless"/>
        <variable name="JS1S2" public_interface="in" units="flux"/>
        <variable name="JNCX" public_interface="in" units="flux"/>
        <variable name="JSERCA" public_interface="in" units="flux"/>
        <variable name="I_iCa" public_interface="in" units="picoampere"/>
        <variable name="delta_SPU" public_interface="in" units="micromolar_per_coulomb"/>
        <variable name="gamma_S1" public_interface="in" units="dimensionless"/>
        <variable name="gamma_MT" public_interface="in" units="dimensionless"/>
        <variable name="gamma_ER" public_interface="in" units="dimensionless"/>
        <variable name="alpha_scale" public_interface="in" units="dimensionless"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>CS1</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>JS1S2</ci>
                        <apply>
                            <times/>
                            <ci>lambda_MT_S1</ci>
                            <ci>JNCX</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <ci>delta_SPU</ci>
                                <apply>
                                    <times/>
                                    <ci>alpha_scale</ci>
                                    <cn cellml:units="dimensionless">2.0</cn>
                                </apply>
                            </apply>
                            <ci>I_iCa</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>lambda_ER_S1</ci>
                            <ci>JSERCA</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>lambda_MT_S1</ci>
                <apply>
                    <divide/>
                    <ci>gamma_MT</ci>
                    <ci>gamma_S1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>lambda_ER_S1</ci>
                <apply>
                    <divide/>
                    <ci>gamma_ER</ci>
                    <ci>gamma_S1</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="CS2" name="CS2">
        <variable initial_value="0.023" name="CS2" public_interface="out" units="micromolar"/>
        <variable name="lambda_MT_S2" units="dimensionless"/>
        <variable name="lambda_ER_S2" units="dimensionless"/>
        <variable name="lambda_S1_S2" units="dimensionless"/>
        <variable name="JS1S2" public_interface="in" units="flux"/>
        <variable name="JS2Cy" public_interface="in" units="flux"/>
        <variable name="JMCU" public_interface="in" units="flux"/>
        <variable name="JIPR" public_interface="in" units="flux"/>
        <variable name="gamma_S1" public_interface="in" units="dimensionless"/>
        <variable name="gamma_S2" public_interface="in" units="dimensionless"/>
        <variable name="gamma_MT" public_interface="in" units="dimensionless"/>
        <variable name="gamma_ER" public_interface="in" units="dimensionless"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>CS2</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>JS2Cy</ci>
                        <apply>
                            <times/>
                            <ci>lambda_ER_S2</ci>
                            <ci>JIPR</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>lambda_S1_S2</ci>
                            <ci>JS1S2</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>lambda_MT_S2</ci>
                            <ci>JMCU</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>lambda_MT_S2</ci>
                <apply>
                    <divide/>
                    <ci>gamma_MT</ci>
                    <ci>gamma_S2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>lambda_ER_S2</ci>
                <apply>
                    <divide/>
                    <ci>gamma_ER</ci>
                    <ci>gamma_S2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>lambda_S1_S2</ci>
                <apply>
                    <divide/>
                    <ci>gamma_S1</ci>
                    <ci>gamma_S2</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="CER" name="CER">
        <variable initial_value="200.0" name="CER" public_interface="out" units="micromolar"/>
        <variable name="JSERCA" public_interface="in" units="flux"/>
        <variable name="JIPR" public_interface="in" units="flux"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>CER</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>JSERCA</ci>
                    <ci>JIPR</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="CMT" name="CMT">
        <variable initial_value="0.200" name="CMT" public_interface="out" units="micromolar"/>
        <variable name="fm" units="dimensionless"/>
        <variable initial_value="0.01" name="Km" units="micromolar"/>
        <variable initial_value="100.0" name="Bm" units="micromolar"/>
        <variable name="JMCU" public_interface="in" units="flux"/>
        <variable name="JNCX" public_interface="in" units="flux"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>CMT</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>fm</ci>
                    <apply>
                        <minus/>
                        <ci>JMCU</ci>
                        <ci>JNCX</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>fm</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>Km</ci>
                                <ci>Bm</ci>
                            </apply>
                            <apply>
                                <power/>
                                <apply>
                                    <plus/>
                                    <ci>Km</ci>
                                    <ci>CMT</ci>
                                </apply>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="NS1" name="NS1">
        <variable initial_value="1.01E4" name="NS1" public_interface="out" units="micromolar"/>
        <variable name="alpha_scale" public_interface="in" units="dimensionless"/>
        <variable name="delta_SPU" public_interface="in" units="micromolar_per_coulomb"/>
        <variable name="I_iNa" public_interface="in" units="picoampere"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>NS1</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>delta_SPU</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <ci>alpha_scale</ci>
                        </apply>
                    </apply>
                    <ci>I_iNa</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="model_parameters">
        <variable initial_value="8.314E-3" name="R" public_interface="out" units="attojoule_per_zeptomole_kelvin"/>
        <variable initial_value="0.09649" name="F" public_interface="out" units="femtocoulomb_per_zeptomole"/>
        <variable initial_value="310.16" name="T" public_interface="out" units="kelvin"/>
        <variable initial_value="140.0E3" name="NO" public_interface="out" units="micromolar"/>
        <variable initial_value="1.8E3" name="CO" public_interface="out" units="micromolar"/>
        <variable initial_value="5400.0" name="KO" public_interface="out" units="micromolar"/>
        <variable initial_value="145E3" name="Ki" public_interface="out" units="micromolar"/>
        <variable initial_value="1.0" name="P" public_interface="out" units="micromolar"/>
        <variable initial_value="18.5" name="delta_SPU" public_interface="out" units="micromolar_per_coulomb"/>
        <variable initial_value="100.0" name="gamma_S1" public_interface="out" units="dimensionless"/>
        <variable initial_value="1.0" name="gamma_S2" public_interface="out" units="dimensionless"/>
        <variable initial_value="200.0" name="gamma_MT" public_interface="out" units="dimensionless"/>
        <variable initial_value="20.0" name="gamma_ER" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.12" name="KNSCC" public_interface="out" units="micromolar"/>
        <variable initial_value="0.0" name="ENSCC" public_interface="out" units="millivolt"/>
        <variable initial_value="3.0" name="hNSCC" public_interface="out" units="dimensionless"/>
        <variable name="alpha_scale" public_interface="out" units="dimensionless"/>
        <variable name="n_PU" public_interface="in" units="dimensionless"/>
        <variable initial_value="50.0" name="n_PU_base" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>alpha_scale</ci>
                <apply>
                    <divide/>
                    <ci>n_PU_base</ci>
                    <ci>n_PU</ci>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="pacemaker_unit_model">
            <component_ref component="PU_membrane"/>
            <component_ref component="I_Ca"/>
            <component_ref component="I_Na"/>
            <component_ref component="I_NSCC_Ca"/>
            <component_ref component="I_NSCC_Na"/>
            <component_ref component="I_PM"/>
            <component_ref component="I_NaP"/>
            <component_ref component="JSERCA"/>
            <component_ref component="JMCU"/>
            <component_ref component="JIPR"/>
            <component_ref component="JNCX"/>
            <component_ref component="CS1"/>
            <component_ref component="CS2"/>
            <component_ref component="CER"/>
            <component_ref component="CMT"/>
            <component_ref component="NS1"/>
            <component_ref component="model_parameters"/>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="PU_membrane" component_2="I_Ca"/>
        <map_variables variable_1="I_Ca" variable_2="I_Ca"/>
    </connection>
    <connection>
        <map_components component_1="PU_membrane" component_2="I_NaP"/>
        <map_variables variable_1="I_NaP" variable_2="I_NaP"/>
    </connection>
    <connection>
        <map_components component_1="PU_membrane" component_2="I_Na"/>
        <map_variables variable_1="I_Na" variable_2="I_Na"/>
    </connection>
    <connection>
        <map_components component_1="PU_membrane" component_2="I_NSCC_Na"/>
        <map_variables variable_1="I_NSCC_Na" variable_2="I_NSCC_Na"/>
    </connection>
    <connection>
        <map_components component_1="PU_membrane" component_2="I_NSCC_Ca"/>
        <map_variables variable_1="I_NSCC_Ca" variable_2="I_NSCC_Ca"/>
    </connection>
    <connection>
        <map_components component_1="PU_membrane" component_2="I_PM"/>
        <map_variables variable_1="I_PM" variable_2="I_PM"/>
    </connection>
    <connection>
        <map_components component_1="PU_membrane" component_2="CS1"/>
        <map_variables variable_1="I_iCa" variable_2="I_iCa"/>
    </connection>
    <connection>
        <map_components component_1="PU_membrane" component_2="NS1"/>
        <map_variables variable_1="I_iNa" variable_2="I_iNa"/>
    </connection>
    <connection>
        <map_components component_1="PU_membrane" component_2="model_parameters"/>
        <map_variables variable_1="alpha_scale" variable_2="alpha_scale"/>
    </connection>
    <connection>
        <map_components component_1="JSERCA" component_2="CS1"/>
        <map_variables variable_1="CS1" variable_2="CS1"/>
        <map_variables variable_1="JSERCA" variable_2="JSERCA"/>
    </connection>
    <connection>
        <map_components component_1="JNCX" component_2="CS1"/>
        <map_variables variable_1="JNCX" variable_2="JNCX"/>
    </connection>
    <connection>
        <map_components component_1="I_PM" component_2="CS1"/>
        <map_variables variable_1="CS1" variable_2="CS1"/>
    </connection>
    <connection>
        <map_components component_1="I_NSCC_Ca" component_2="CS1"/>
        <map_variables variable_1="CS1" variable_2="CS1"/>
    </connection>
    <connection>
        <map_components component_1="I_NSCC_Na" component_2="CS1"/>
        <map_variables variable_1="CS1" variable_2="CS1"/>
    </connection>
    <connection>
        <map_components component_1="model_parameters" component_2="CS1"/>
        <map_variables variable_1="delta_SPU" variable_2="delta_SPU"/>
        <map_variables variable_1="gamma_MT" variable_2="gamma_MT"/>
        <map_variables variable_1="gamma_S1" variable_2="gamma_S1"/>
        <map_variables variable_1="gamma_ER" variable_2="gamma_ER"/>
        <map_variables variable_1="alpha_scale" variable_2="alpha_scale"/>
    </connection>
    <connection>
        <map_components component_1="JMCU" component_2="CS2"/>
        <map_variables variable_1="CS2" variable_2="CS2"/>
        <map_variables variable_1="JMCU" variable_2="JMCU"/>
    </connection>
    <connection>
        <map_components component_1="JIPR" component_2="CS2"/>
        <map_variables variable_1="CS2" variable_2="CS2"/>
        <map_variables variable_1="JIPR" variable_2="JIPR"/>
    </connection>
    <connection>
        <map_components component_1="JIPR" component_2="model_parameters"/>
        <map_variables variable_1="P" variable_2="P"/>
    </connection>
    <connection>
        <map_components component_1="model_parameters" component_2="CS2"/>
        <map_variables variable_1="gamma_MT" variable_2="gamma_MT"/>
        <map_variables variable_1="gamma_S1" variable_2="gamma_S1"/>
        <map_variables variable_1="gamma_S2" variable_2="gamma_S2"/>
        <map_variables variable_1="gamma_ER" variable_2="gamma_ER"/>
    </connection>
    <connection>
        <map_components component_1="JSERCA" component_2="CER"/>
        <map_variables variable_1="CER" variable_2="CER"/>
        <map_variables variable_1="JSERCA" variable_2="JSERCA"/>
    </connection>
    <connection>
        <map_components component_1="JIPR" component_2="CER"/>
        <map_variables variable_1="CER" variable_2="CER"/>
        <map_variables variable_1="JIPR" variable_2="JIPR"/>
    </connection>
    <connection>
        <map_components component_1="JNCX" component_2="CMT"/>
        <map_variables variable_1="CMT" variable_2="CMT"/>
        <map_variables variable_1="JNCX" variable_2="JNCX"/>
    </connection>
    <connection>
        <map_components component_1="JMCU" component_2="CMT"/>
        <map_variables variable_1="CMT" variable_2="CMT"/>
        <map_variables variable_1="JMCU" variable_2="JMCU"/>
    </connection>
    <connection>
        <map_components component_1="model_parameters" component_2="NS1"/>
        <map_variables variable_1="delta_SPU" variable_2="delta_SPU"/>
        <map_variables variable_1="alpha_scale" variable_2="alpha_scale"/>
    </connection>
    <connection>
        <map_components component_1="model_parameters" component_2="I_NSCC_Ca"/>
        <map_variables variable_1="hNSCC" variable_2="hNSCC"/>
        <map_variables variable_1="ENSCC" variable_2="ENSCC"/>
        <map_variables variable_1="KNSCC" variable_2="KNSCC"/>
    </connection>
    <connection>
        <map_components component_1="model_parameters" component_2="I_NSCC_Na"/>
        <map_variables variable_1="hNSCC" variable_2="hNSCC"/>
        <map_variables variable_1="ENSCC" variable_2="ENSCC"/>
        <map_variables variable_1="KNSCC" variable_2="KNSCC"/>
    </connection>
    <connection>
        <map_components component_1="I_Ca" component_2="CS1"/>
        <map_variables variable_1="CS1" variable_2="CS1"/>
    </connection>
    <connection>
        <map_components component_1="I_Ca" component_2="model_parameters"/>
        <map_variables variable_1="R" variable_2="R"/>
        <map_variables variable_1="T" variable_2="T"/>
        <map_variables variable_1="F" variable_2="F"/>
        <map_variables variable_1="CO" variable_2="CO"/>
    </connection>
    <connection>
        <map_components component_1="I_Na" component_2="model_parameters"/>
        <map_variables variable_1="R" variable_2="R"/>
        <map_variables variable_1="T" variable_2="T"/>
        <map_variables variable_1="F" variable_2="F"/>
        <map_variables variable_1="NO" variable_2="NO"/>
    </connection>
    <connection>
        <map_components component_1="I_NaP" component_2="NS1"/>
        <map_variables variable_1="NS1" variable_2="NS1"/>
    </connection>
    <connection>
        <map_components component_1="I_Na" component_2="NS1"/>
        <map_variables variable_1="NS1" variable_2="NS1"/>
    </connection>
    <documentation xmlns="http://cellml.org/tmp-documentation">
        <article xmlns="http://cellml.org/tmp-documentation">
            <articleinfo xmlns="http://cellml.org/tmp-documentation">
                <title xmlns="http://cellml.org/tmp-documentation">A Biophysically-Based Mathematical Representation of Interstitial Cells of Cajal Pacemaker Potentials produced from a Unitary Potential

 Basis</title>
                <author xmlns="http://cellml.org/tmp-documentation">
                    <firstname xmlns="http://cellml.org/tmp-documentation">Catherine</firstname>
                    <surname xmlns="http://cellml.org/tmp-documentation">Lloyd</surname>
                    <affiliation xmlns="http://cellml.org/tmp-documentation">
                        <shortaffil xmlns="http://cellml.org/tmp-documentation">Auckland Bioengineering Institute, University of Auckland</shortaffil>
                    </affiliation>
                </author>
            </articleinfo>
            <section xmlns="http://cellml.org/tmp-documentation" id="sec_status">
                <title xmlns="http://cellml.org/tmp-documentation">Model Status</title>
                <para xmlns="http://cellml.org/tmp-documentation">
        This CellML model describes the pacemaker unit of the Faville et al. 2008 model.  This model is imported by the bulk cytoplasm model from the same publication 10 times. This CellML model is known to run PCEnv to replicate the published results. Because the model is in a CellML 1.1 format (as opposed to CellML 1.0) COR is unable to run the model.</para>
                <para xmlns="http://cellml.org/tmp-documentation">ValidateCellML confirms this model as valid CellML. Unit checking was carried out where possible and to our knowledge they are consistent.
          </para>
            </section>
            <sect1 xmlns="http://cellml.org/tmp-documentation" id="sec_structure">
                <title xmlns="http://cellml.org/tmp-documentation">Model Structure</title>
                <para xmlns="http://cellml.org/tmp-documentation">
ABSTRACT: Spontaneously rhythmic pacemaker activity produced by interstitial cells of Cajal (ICC) is the result of the entrainment of unitary potential depolarizations generated at intracellular sites termed pacemaker units. In this study, we present a mathematical modeling framework that quantitatively represents the transmembrane ion flows and intracellular Ca2+ dynamics from a single ICC operating over the physiological membrane potential range. The mathematical model presented here extends our recently developed biophysically based pacemaker unit modeling framework by including mechanisms necessary for coordinating unitary potential events, such as a T-Type Ca2+ current, Vm-dependent K+ currents, and global Ca2+ diffusion. Model simulations produce spontaneously rhythmic slow wave depolarizations with an amplitude of 65 mV at a frequency of 17.4 cpm. Our model predicts that activity at the spatial scale of the pacemaker unit is fundamental for ICC slow wave generation, and Ca2+ influx from activation of the T-Type Ca2+ current is required for unitary potential entrainment. These results suggest that intracellular Ca2+ levels, particularly in the region local to the mitochondria and endoplasmic reticulum, significantly influence pacing frequency and synchronization of pacemaker unit discharge. Moreover, numerical investigations show that our ICC model is capable of qualitatively replicating a wide range of experimental observations.</para>
                <para xmlns="http://cellml.org/tmp-documentation">
In the study described here, Richard Faville <emphasis xmlns="http://cellml.org/tmp-documentation">et al.</emphasis> have developed a mathematical model of the ICC pacemaker potential.  The model can be divided into two distinct components: the bulk cytoplasm and the pacemaker units.  The later have been described previously (Faville <emphasis xmlns="http://cellml.org/tmp-documentation">et al.</emphasis>, 2008, and the CellML description of this model can be found <ulink xmlns="http://cellml.org/tmp-documentation" url="http://models.cellml.org/workspace/faville_pullan_sanders_koh_lloyd_smith_2009/@@file/a69dfff7b0d090bc51b49b5e4cda835130354d8d/faville_pacemaker_unit_2008.cellml">here</ulink>).  The pacemaker unit model quantitatively describes the transmembrane ion flows and intracellular Ca2+ dynamics from a single ICC pacemaker unit, and a schematic diagram of this model can be seen in the figure immediately below.
</para>
                <informalfigure xmlns="http://cellml.org/tmp-documentation" float="0" id="fig_reaction_diagram">
                    <mediaobject xmlns="http://cellml.org/tmp-documentation">
                        <imageobject xmlns="http://cellml.org/tmp-documentation">
                            <objectinfo xmlns="http://cellml.org/tmp-documentation">
                                <title xmlns="http://cellml.org/tmp-documentation">model diagram</title>
                            </objectinfo>
                            <imagedata xmlns="http://cellml.org/tmp-documentation" fileref="faville_2008_new.png"/>
                        </imageobject>
                    </mediaobject>
                    <caption xmlns="http://cellml.org/tmp-documentation">A schematic diagram of the pacemaker unit illustrating all the compartmental volumes and ionic conductances, together with their interactions.</caption>
                </informalfigure>
                <para xmlns="http://cellml.org/tmp-documentation">
The combined model is described here in CellML 1.1.  The pacemaker unit is defined and is imported into the bulk cytoplasm 10 times (note that the number of pacemaker units that could be used within the modelling framework is completely arbitrary, however 10 appears to be the minimum number required to adequately describe the pacemaker potential depolarisation).  In order to embed the pacemaker model within the bulk cytoplasm modelling framework the original pacemaker model had to be modified slightly.  This is because the it was only representative of pacemaker activity near the resting membrane potential of -70mV.  In its modified form and embedded within the bulk cytoplasm it is now capable of simulating pacemaker activity under conditions of membrane depolarisation (Vm > -60mV).  A full schematic diagram of the combined model is illustrated in the figure below.
</para>
                <informalfigure xmlns="http://cellml.org/tmp-documentation" float="0" id="fig_reaction_diagram">
                    <mediaobject xmlns="http://cellml.org/tmp-documentation">
                        <imageobject xmlns="http://cellml.org/tmp-documentation">
                            <objectinfo xmlns="http://cellml.org/tmp-documentation">
                                <title xmlns="http://cellml.org/tmp-documentation">model diagram</title>
                            </objectinfo>
                            <imagedata xmlns="http://cellml.org/tmp-documentation" fileref="faville2_2008.png"/>
                        </imageobject>
                    </mediaobject>
                    <caption xmlns="http://cellml.org/tmp-documentation">A full schematic diagram of the bulk cytoplasm model with the imported pacemaker units illustrating all the compartmental volumes and ionic conductances, together with their interactions.</caption>
                </informalfigure>
                <para xmlns="http://cellml.org/tmp-documentation">
The original paper reference is cited below:
</para>
                <para xmlns="http://cellml.org/tmp-documentation">
Biophysically based mathematical modeling of interstitial cells of Cajal slow wave activity generated from a discrete unitary potential basis, R.A. Faville, A.J. Pullan, K.M. Sanders, S.D. Koh, C.M. Lloyd and N.P. Smith, 2009, <emphasis xmlns="http://cellml.org/tmp-documentation">Biophysical Journal</emphasis>, 96, 4834-4852.
          <ulink xmlns="http://cellml.org/tmp-documentation" url="http://www.ncbi.nlm.nih.gov/pubmed/19527643">PubMed ID: 19527643</ulink>
                </para>
            </sect1>
        </article>
    </documentation>
</model>
